PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent hz_18
      fillColor = white
      opacity [set every frame] = (frameN%8) <=2
      pos = (0.5, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent hz_16
      fillColor = white
      opacity [set every frame] = (frameN%9) <=3
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent hz_12
      fillColor = white
      opacity [set every frame] = (frameN%12) <=5
      pos = (-0.5, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('eegtime', eeg.setMarker())
    TextComponent text
      letterHeight = 0.05
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = 18
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        16
    TextComponent text_4
      letterHeight = 0.05
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = 12
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  Routine Start
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Press Space to Continue
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import EEGController
        eeg = EEGController.EEGController()
  Routine Adios
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        DONE
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_1
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine trial_16
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    PolygonComponent hz16
      fillColor = white
      opacity [set every frame] = (frameN%9) <=3
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('eegtime', eeg.setMarker())
  Routine break_2
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine trial_24
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    PolygonComponent hz24
      fillColor = white
      opacity [set every frame] = (frameN%6) <=1
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('eegtime', eeg.setMarker())
  Routine trial_12
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    PolygonComponent hz12
      fillColor = white
      opacity [set every frame] = (frameN%12) <=5
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('eegtime', eeg.setMarker())
  Routine trial_19
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Flow
  Routine Start
  Routine break_1
  Routine trial
  Routine break_2
  Routine trial
  Routine break_2
  Routine trial
  Routine break_2
  Routine Adios
